# 1 "/opt/topspin3.5pl5/exp/stan/nmr/lists/pp/user/zg490.rak"
;zg490.rak
;avance-version (02/05/31)
;1D sequence for pulse calibration
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


;$OWNER=ep
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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d1
  p1 ph1 
  3u
  p1 ph1 
  3u
  p1 ph1 
  3u
  p1 ph1 
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit


ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1
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;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;NS: 1 * n, total number of scans: NS * TD0


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;$Id: zg,v 1.8 2005/11/10 12:17:01 ber Exp $
